global double xPos;
global double yPos;
global double xMinus;
global double yMinus;
global double xPlus;
global double yPlus;
global char objName;
StgZ_SetActiveZ(0);

//StgXY_SetLimits(-55000,-31000,52000,31000);
StgZ_SetLimits(0.00000,7500.00000);
StgXY_SetMotorSpeed(20000);
StgXY_SetLimits(-46250,-25250,50000,24500); //for 10x/0.45
StgXY_GetLimits(&xMinus,&yMinus,&xPlus,&yPlus);
StgGetPosXY(&xPos,&yPos);

if ((xPos > xPlus) || (xPos < xMinus) || (yPos > yPlus) || (yPos < yMinus))
   {
      StgZ_Escape();
      StgMoveXY(1.0,1.0,1);   // move a 1 micron in xy, the scope then moves to the new stage limits automagically
 //     if (xPos > 0 && yPos < 0)  {StgMoveXY(-20.0,20.0,1);}
//      if (xPos < 0 && yPos > 0)  {StgMoveXY(20.0,-20.0,1);}
//      if (xPos > 0 && yPos > 0)  {StgMoveXY(-20.0,-20.0,1);}
      
   }

Stg_SetNosepiecePosition(1);
Stg_SetCondenserPosition(1);
StgZ_Refocus();
StgZ_SetActiveZ(1);

    