// ExistFile example - shows how to use different functions for File handling.
char      buffer[1000];
char      filename[256],section[256],path[256],buf[2048];


//define Open and save filepaths
Int_GetKeyString("C:\ScopeConfig\currentuser.txt","User","File",buffer,1024);

SetUsedFixPathForFiles(buffer);
_SetTempFilesPathForNextSession("");
_SetTempFilesPathForNextSession("");

OpenNext_SourceImages(buffer, 0, "");
OpenNext_Sort(1, 1, 0);
OpenNext_SetNum(1);

SaveNext_Images(buffer, 4, "seq", 0);
SaveNext_ImageInfo(NULL, NULL, NULL, NULL, 0, 0);

//define ND filepaths
Int_GetKeyString("C:\ScopeConfig\currentuser.txt","User","ND",buffer,1024);
ND_DefineExperiment(0,0,0,0,0,buffer,"",0,0,0,0);
 
//define Jobs filepath
Int_GetKeyString("C:\ScopeConfig\currentuser.txt","User","Jobs",buffer,1024);
Jobs_OpenExistingDb(buffer, 0, 0);



       