global double xPos;
global double yPos;
global double xMinus;
global double yMinus;
global double xPlus;
global double yPlus;

StgXY_GetLimits(&xMinus,&yMinus,&xPlus,&yPlus);
StgGetPosXY(&xPos,&yPos);

if ((xPos > xPlus) || (xPos < xMinus) || (yPos > yPlus) || (yPos < yMinus))
   {
      StgZ_Escape();
      StgMoveXY(1.0,1.0,1);   // move a 1 micron in xy, the scope then moves to the new stage limits automagically
 //     if (xPos > 0 && yPos < 0)  {StgMoveXY(-20.0,20.0,1);}
//      if (xPos < 0 && yPos > 0)  {StgMoveXY(20.0,-20.0,1);}
//      if (xPos > 0 && yPos > 0)  {StgMoveXY(-20.0,-20.0,1);}
      StgZ_Refocus();
   }


      

   
   
  